<PlusConfiguration version="2.2"
  >
  <!-- Used by vtkPlusUsSimulatorAlgoTest -->

      <!-- SequenceFile="SlidingProbeTrackingData.igs.mha" -->
    <Device
      Id="TrackerDevice"
      Type="SavedDataSource"
      UseData="TRANSFORM"
      AcquisitionRate="10"
      LocalTimeOffsetSec="0.0"
      UseOriginalTimestamps="FALSE"
      RepeatEnabled="TRUE"
      ToolReferenceFrame="Tracker" >
      <DataSources>
        <DataSource Type="Tool" Id="Probe" />
        <DataSource Type="Tool" Id="Needle" />
        <DataSource Type="Tool" Id="Reference" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream" >
          <DataSource Id="Probe"/>
          <DataSource Id="Needle"/>
          <DataSource Id="Reference"/>
        </OutputChannel>
      </OutputChannels>
    </Device>

    <Device
      Id="VideoDevice"
      Type="UsSimulator"
      LocalTimeOffsetSec="0.0"
      AcquisitionRate="15" >
      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="MF" />  
      </DataSources>      
      <InputChannels>
        <InputChannel Id="TrackerStream" />
      </InputChannels>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>
    
  <vtkPlusUsSimulatorAlgo
      ImageCoordinateFrame="Image"
      ReferenceCoordinateFrame="Reference"
      IncomingIntensityMwPerCm2="300"
      BrightnessConversionGamma="0.2"
      BrighntessConversionOffset="30"
      NumberOfScanlines="128"
      NumberOfSamplesPerScanline="1000"
      NoiseAmplitude="5.0"
      NoiseFrequency="2.5 3.5 1"
      NoisePhase="50 20 0"        
      >
    <SpatialModel
        Name="Air"
        DensityKgPerM3="1.2"
        SoundVelocityMPerSec="343"
        AttenuationCoefficientDbPerCmMhz="100.0"
        BackscatterDiffuseReflectionCoefficient="0.1"
        SurfaceReflectionIntensityDecayDbPerMm="50"
	/>
    <SpatialModel
        Name="GelBlock"
        ObjectCoordinateFrame="Reference"
        ModelFile="gel_block.stl"
        DensityKgPerM3="910"
        SoundVelocityMPerSec="1540"
        AttenuationCoefficientDbPerCmMhz="3.0"
        BackscatterDiffuseReflectionCoefficient="0.1"
        SurfaceSpecularReflectionCoefficient="0.1"
        SurfaceDiffuseReflectionCoefficient="0.0"
        TransducerSpatialModelMaxOverlapMm="50"
        />
    <SpatialModel
        Name="Vessel"
        ObjectCoordinateFrame="Reference"
        ModelFile="vessel.stl"
        ModelToObjectTransform="
				1 0 0 0
				0 1 0 0
				0 0 1 0
				0 0 0 1"
        DensityKgPerM3="1800"
        SoundVelocityMPerSec="2000"
        AttenuationCoefficientDbPerCmMhz="0.0001"
        BackscatterDiffuseReflectionCoefficient="0.03"          
        SurfaceSpecularReflectionCoefficient="0.1"
        SurfaceDiffuseReflectionCoefficient="0.0"
        />
    <SpatialModel
        Name="Needle"
        ObjectCoordinateFrame="NeedleTip"
        ModelFile="SimulatedUltrasound_NeedleModel_NeedleTip.stl"
        ModelToObjectTransform="
				1 0 0 0
				0 1 0 0
				0 0 1 0
				0 0 0 1"
        DensityKgPerM3="2000"
        SoundVelocityMPerSec="2000"      
        AttenuationCoefficientDbPerCmMhz="8.0"
        BackscatterDiffuseReflectionCoefficient="0.2"
        SurfaceSpecularReflectionCoefficient="0.1"
        SurfaceDiffuseReflectionCoefficient="0.0"
        SurfaceReflectionIntensityDecayDbPerMm="5"
        />
    <RfProcessing>
      <ScanConversion
        TransducerName="BK_8848-axial"
        TransducerGeometry="CURVILINEAR"
        RadiusStartMm="5.0"
        RadiusStopMm="60.0"
        ThetaStartDeg="-60.0"
        ThetaStopDeg="60.0"
        OutputImageSizePixel="1200 800"
        TransducerCenterPixel="600 34"
        OutputImageSpacingMmPerPixel="0.084 0.087" />
    </RfProcessing>
  </vtkPlusUsSimulatorAlgo>

    <Device 
      Id="TrackedVideoDevice" 
      Type="VirtualMixer" >
      <InputChannels>
        <InputChannel Id="TrackerStream" />
        <InputChannel Id="VideoStream" />
      </InputChannels>
      
      <OutputChannels>
        <OutputChannel Id="TrackedVideoStream"/>
      </OutputChannels>
    </Device>

    <Device
      Id="CaptureDevice"
      Type="VirtualCapture"
      BaseFilename="RecordingTest.igs.mha"
      EnableCapturingOnStart="FALSE" >
      <InputChannels>
        <InputChannel Id="TrackedVideoStream" />
      </InputChannels>
    </Device>

    <Device
      Id="VolumeReconstructorDevice"
      Type="VirtualVolumeReconstructor"
      OutputVolDeviceName="RecVol_Reference">
      <InputChannels>
        <InputChannel Id="TrackedVideoStream" />
      </InputChannels>
      <VolumeReconstruction
        ImageCoordinateFrame="Image" ReferenceCoordinateFrame="Reference"
        Interpolation="LINEAR" Optimization="NONE" CompoundingMode="MEAN" FillHoles="ON" NumberOfThreads="2"
        ClipRectangleOrigin="0 0" ClipRectangleSize="820 616"
        OutputOrigin="60 -10 -15" OutputExtent="0 334 0 396 0 542" OutputSpacing="0.15 0.15 0.15" >
        <HoleFilling>
          <HoleFillingElement
            Type="STICK"     
            StickLengthLimit="9"
            NumberOfSticksToUse="1" />
        </HoleFilling>
      </VolumeReconstruction>
    </Device>
    
  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="10"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18944"
    SendValidTransformsOnly="true"
    OutputChannelId="TrackedVideoStream" >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <Transform Name="ProbeToReference" />
        <Transform Name="NeedleTipToReference" />        
      </TransformNames>
    <ImageNames>
      <Image Name="Image" EmbeddedTransformToFrame="Reference" />
    </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

  <CoordinateDefinitions>
    <Transform From="NeedleTip" To="Needle"
      Matrix="
         1 0 0 0
         0 1 0 0
         0 0 1 0
         0 0 0 1" />	
    <Transform From="Image" To="Probe"
      Matrix="-0.00228039 0.0860508 -0.00121134 0
              -0.0860501 -0.00229763 -0.00122624 0
              -0.00125802 0.0011783 0.0860722 0
	      0 0 0 1"
      Error="0.582721" Date="2012.02.06 17:57:00" />
    <Transform From="Image" To="TransducerOriginPixel"
      Matrix="1 0 0 0
              0 1 0 0
              0 0 1 0
              0 0 0 1" />    
  </CoordinateDefinitions> 

</PlusConfiguration>
<!--
        0 0 0 1"-->
